PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.1.1
  Window size (pixels) = [1920, 1080]
  expName = FaceInversion_Localizer
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    UnknownPluginComponent trial_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.8
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  Routine Welcome
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    UnknownPluginComponent Welcome_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        This is a very simple experiment. You will be presented with a few faces. Sometimes the faces will be presented in upright position, sometimes inverted. Before each face presentation, you will be cued by a fixation cross at the center of the screen.

        Your task is simply to look a the faces and pay attention.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    UnknownPluginComponent end_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent end_of_experiment
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        The experiment is over.

        Thank you for participating.

        You can let the experimenter know the experiment is over.

        Please remain still to receive further instructions.
Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = face_inversion_localizer_stims.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'stimulus': 'ef10_n.jpg', 'condition': 'upright'},
      {'stimulus': 'ef9_n.jpg', 'condition': 'upright'},
      {'stimulus': 'ef5_n.jpg', 'condition': 'upright'},
      {'stimulus': 'em1_n.jpg', 'condition': 'upright'},
      {'stimulus': 'ef6_n.jpg', 'condition': 'upright'},
      {'stimulus': 'em2_n.jpg', 'condition': 'upright'},
      {'stimulus': 'ef7_n.jpg', 'condition': 'upright'},
      {'stimulus': 'em3_n.jpg', 'condition': 'upright'},
      {'stimulus': 'ef8_n.jpg', 'condition': 'upright'},
      {'stimulus': 'em4_n.jpg', 'condition': 'upright'},
      {'stimulus': 'ef8_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'em4_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'ef10_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'ef9_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'ef7_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'em3_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'ef6_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'em2_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'ef5_n_inverted.jpg', 'condition': 'inverted'},
      {'stimulus': 'em1_n_inverted.jpg', 'condition': 'inverted'}]
    Routine trial
  LoopTerminator trials
  Routine end
